PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = Peak_procedure
  Units = use prefs
  Screen = 1
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Routines
  Routine break_time
  Routine Peak_Interval
  Routine Fixed_Interval
  Routine Closing
  Routine Instructions
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100000
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    Routine Fixed_Interval
    Routine Peak_Interval
    Routine break_time
  LoopTerminator trials
  Routine Closing
